PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['comprehension_questions/Qs_Text1.html', 'demographics.html', 'index.html', 'informed_consent.html']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = EXNAT_study
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Routines
  Routine settings
    CodeComponent init_JS
      Code Type = JS
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      Begin JS Experiment:
        // import / create functions needed to run this experiment

        // import random
        random = Math.random;
        console.log("imported random package");

        // from random import shuffle
        var random_shuffle = function(array) {
          var array, currentIndex = array.length, randomIndex;
          // While there remain elements to shuffle...
          while (currentIndex != 0) {
            // pick a random element
            randomIndex = Math.floor(Math.random() * currentIndex);
            currentIndex--;
            // and swap it with the current element
            [array[currentIndex], array[randomIndex]] = [
              array[randomIndex], array[currentIndex]];
          }
          // return shuffled array
          return array;
        }
        console.log("defined shuffle function")

        // np.random.uniform()
        var uniform = function(min, max) {
          var min, max;
          return (Math.random() * (max-1 - min + 1) + min);
        }
        console.log("defined uniform function");

        //.append()
        // append a value to an array
        //var append = function(array, value){
        //    var array, value;
        //    return array.push(value);
        //}
        //console.log("defined append function");
        // disabled because it doesn't work - use extend instead!

        // .extend()
        // concatenate 2 arrays, return as new array
        var extend = function(array1, array2){
            var array1, array2;
            return array1.concat(array2);
        }
        console.log("defined extend function");


        // random.sample()
        // this function is using the Fisher-Yates shuffle and
        // taking a part of the resulting array to create the random sample
        var random_sample = function(arr, k) {
            // with arr = some sample to draw from and k = sample size

            // define variables
            var arr, k, shuffled = arr.slice(0), i = arr.length, min = i - k, temp, index;
            while (i-- > min) {
                index = Math.floor((i + 1) * Math.random());
                temp = shuffled[index];
                shuffled[index] = shuffled[i];
                shuffled[i] = temp;
            }
            return shuffled.slice(min);
        }
        console.log("defined random.sample function");


        // repeat()
        var repeat = function(value, times) {
            // set variables
            var value, times;

            // if you want to repeat a single value
            if (typeof value === 'string' || value instanceof String){
                // just repeat value and return as array
                return Array(times).fill(value);
            }
            // if you want to repeat an array
            else if (Array.isArray(value)){
                // save value array you want to append & mutate the original one
                var add_value = value;
                for (var i = 0; i < times-1; i++){
                    // define variables again
                    var array1, array2;
                    value = extend.call(this, array1 = value, array2 = add_value);
                }
                // return concatenated arrays
                return value;
            }
        }
        console.log("defined repeat function");

        // count
        var count = function(array, value){
            // set variables
            var array, value, counter = 0, array_val;
            // loop array, add 1 to counter if current value matches value
            for (array_val of array) {
                if (array_val == value) {
                    counter = counter + 1;
                }
            }
            return counter;
        }
        console.log("defined count function");

        // other stuff
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;


        // range() (adapted from Becca Hirst's version)
        var range = function(start, stop) {
            var start, stop;
            // careful, as in the Python equivalent,
            // start is included in the range, stop isn't
            return [...Array(stop-1).keys()].map(i => i + start);
        }

        // function to check if value is unique
        var isUnique = function(value, index, array) {
            var value, index, array;
          return array.indexOf(value) === array.lastIndexOf(value);
        }

        // only get unique values from array (python "set" function)
        var set = function(array){
            var array;
            return array.filter(isUnique);
        }
    CodeComponent PY_packages
      Code Type = Py
      Begin Experiment:
        import random

        from random import shuffle as random_shuffle
    CodeComponent prep_helper_functions
      Code Type = Both
      Begin Experiment:
        # create JS-friendly custom "numpy" functions

        # np.min()
        def minimum(data):
            min_value = data[0]
            for val in data:
                if val < min_value:
                    min_value = val
            return min_value

        # np.max()
        def maximum(data):
            max_value = data[0]
            for val in data:
                if val > max_value: max_value = val
            return max_value

        # np.mean
        def mean(data):
            return float(sum(data)/len(data))

        # np.sqrt
        def sqrt(N):
            if N < 0:
                print("ERROR! Tried computing square root of negative number")
                return
            else:
                return N ** 0.5

        # np.var
        def variance(data):
            mu = mean(data)
            variance = 0
            for val in data:
                variance = variance + (val - mu) ** 2
            variance = variance / len(data)
            return variance

        # np.std
        def std(data):
            return sqrt(variance(data))

        # np.repeat
        def repeat(value, times):
            new_list = []
            if type(value) is list:
                for t in range(0, times):
                    for val in value:
                        new_list.append(val)
            else:
                for t in range(0, times):
                    new_list.append(value)
            return new_list
      Begin JS Experiment:
        // create JS-friendly custom "numpy" functions

        // np.min()
        var minimum = function(data) {
            var data, min_value = data[0];
            for (var val, _pj_c = 0, _pj_a = data, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                val = _pj_a[_pj_c];
                if ((val < min_value)) {
                    min_value = val;
                }
            }
            return min_value;
        }
        console.log("defined min function");

        // np.max()
        var maximum = function(data) {
            var data, max_value= data[0];
            for (var val, _pj_c = 0, _pj_a = data, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                val = _pj_a[_pj_c];
                if ((val > max_value)) {
                    max_value = val;
                }
            }
            return max_value;
        }
        console.log("defined max function");

        // np.mean()
        var mean = function(data) {
            var data;
            return Number.parseFloat((util.sum(data) / data.length));
        }
        console.log("defined mean function");

        // np.var()
        var variance = function(data) {
            var data, mu = mean(data), variance = 0;
            for (var val, _pj_c = 0, _pj_a = data, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                val = _pj_a[_pj_c];
                variance = (variance + Math.pow((val - mu), 2));
            }
            variance = (variance / data.length);
            return variance;
        }
        console.log("defined variance function");

        // np.std()
        var std = function(data) {
            var data;
            return sqrt(variance(data));
        }
        console.log("defined std function");
    CodeComponent prep_nback_functions
      Code Type = Both
      Begin Experiment:
        # function for drawing w/o replacement from list that is smaller than sample you want to draw
        # --> start over again if you run out of values, then shuffle everything
        def draw_without_replacement(sampling_list, sample_size):

            # repeat colour_codes_list as often as needed
            rep_times = round(sample_size / len(sampling_list))

            rep_sampling_list = list(repeat(value = sampling_list,
                                            times = rep_times))

            # check if we need some more values, if yes, draw some randomly
            # from colour_codes and append to our list
            if len(rep_sampling_list) < sample_size:

                rep_sampling_list.extend(random.sample(sampling_list,
                                                 k = sample_size - len(rep_sampling_list) ))

            # now shuffle the list
            random.shuffle(rep_sampling_list)

            # return result
            return(list(rep_sampling_list))
        # END FUNCTION



        def create_nback_stimlist(nback_level,
                                  colour_codes,
                                  story,
                                  target_abs_min,
                                  targets_max,
                                  targets_min,
                                  zeroback_target = None):

            # 1.1 chunk settings
            # make sure you can't repeat a colour more than 3x, so if you concatenate 2
            # chunks, in the worst case you can only get the same color 6x
            chunk_size = len(colour_codes) * 3

            # see how many whole chunks + incomplete chunks we need:
            chunk_nr = int(len(story) / chunk_size)
            chunk_missing = len(story) - chunk_size * chunk_nr

            # ---------------------------------------------------------------------------

            # 1.2 loop whole chunks

            random_colour_list = []
            for chunk in range(0,chunk_nr):

                # There's no function to draw without replacement & start over if the sample
                # is larger than the list of values you draw from. So I wrote my own function for this (see above).
                rep_colours = draw_without_replacement(sampling_list = colour_codes,
                                                       sample_size = chunk_size)

                # append chunk to list
                random_colour_list.extend(rep_colours)

            # ---------------------------------------------------------------------------

            # 1.3 fill up colour list with missing incomplete chunk

            # if you need some more values to fill the list...
            if chunk_missing > 0:

                # get some more random colour values as last chunk
                missing_chunk = draw_without_replacement(sampling_list = colour_codes,
                                                         sample_size = chunk_missing)

                # also append to colour list
                random_colour_list.extend(missing_chunk)

            # ---------------------------------------------------------------------------

            # 2. loop colour list, find & count targets for the given n-back level """

            # create empty list to collect targets / non-targets
            target = list()

            for colour_idx in range(0, len(random_colour_list)):

                # if there are enough colours before the current colour to compare with, go on
                if colour_idx >= nback_level:

                    # For the 0-back, we have to compare each colour with a given target colour
                    if nback_level == 0:
                        curr_colour = random_colour_list[colour_idx]
                        curr_target = curr_colour == zeroback_target

                    # For the 1-back - 3-back, we compare each colour with one of its precedessors
                    else:
                        # get current colour and the colour n times before
                        curr_colour = random_colour_list[colour_idx]
                        colour_before = random_colour_list[colour_idx - nback_level]

                        # compare colours: is it a match?
                        curr_target = curr_colour == colour_before

                    # save result in target list
                    target.append(curr_target)

                # if there are no colours to compare, save target as False
                else:
                    target.append(False)

            # now check how many targets there are in our list
            target_count = target.count(True)

            # 2 things can happen now:
            # Thing 1 is that the colour list already has the right amount
            # of targets and everything's fine. This is unlikely but possible.
            # Thing 2 is that there are either too many or not enough targets in our colour list.
            # In this case, we have to take away some targets or add some without creating more targets by accident.
            # Example: 2-back, but we want 1 target less
            # b, r, r, g, o, r, o, b, r, b, g, o, o, o
            #                   ^        ^           ^
            # If we replace the first target by another letter (let's say r),
            # we're creating a target later in the stream by accident:
            # b, r, r, g, o, r, r, b, r, b, g, o, o, o
            #                         ^  ^           ^

            # ---------------------------------------------------------------------------

            # 3. If the number of targets falls into our range... """

            # if the number of targets falls out of our range and/or there are
            # less targets than needed needed, remove or add some targets

            # if everything's okay, save target_count as definite target number and go on:
            if target_count/len(target) >= targets_min and target_count/len(target) <= targets_max and target_count >= target_abs_min:

                target_nr = target_count


            elif target_count/len(target) < targets_min or target_count/len(target) > targets_max or target_count < target_abs_min:


                # 3.1 determine how many targets there should be

                found_target_nr = False
                while found_target_nr == False:

                    # generate a random number of targets between targets_min and targets_max
                    targets_percent = random.uniform(targets_min, targets_max)

                    # check how many targets we would have in absolute numbers
                    target_nr = round(len(story) * targets_percent)

                    # check if this amount of targets is enough
                    if target_nr >= target_abs_min:
                        # if yes, end while loop and keep target number
                        found_target_nr = True

                # ---------------------------------------------------------------------------

                # 3.2 Check if there are too many or not enough targets in our list & make adjustments

                # 3.2.1 Case 1: targets missing
                # if there are not enough targets (aka more needed targets than targets counted) ...
                if target_count - target_nr < 0:

                    # check how many replacements we need to do
                    nr_replacements = int(get_abs(target_count - target_nr))

                    # find indices of non-targets in list "target" and replace by target colours, also replace False by True in "target" list
                    #indices_targets = [i for i, idx in enumerate(target) if idx == False] # Careful, JS might have problems with the enumerate function and/or list comprehensions
                    indices_targets = []
                    for t in range(0, len(target)):
                        if target[t] == False:
                            indices_targets.append(t)

                    # select as many of them as need to be replaced, make sure not to select non-targets from the beginning of the list
                    # --> in 0-back, we don't memorize targets from former trials, so start at idx = 0
                    if nback_level == 0: start = 0
                    # for every other n-back level: start at n - 1 (because python indexing starts with 0,
                    # so start = 2 would mean we start with the 3rd element and not the 2nd)
                    else: start = nback_level-1

                    idx_replacements = random.sample(indices_targets[start:len(indices_targets)],
                                                     k = nr_replacements)

                    # loop replacements, get colour n times before the current idx, use that colour as replacement and mutate colour list
                    for replace_this_colour in idx_replacements:

                        # Special case 0-back: replace with target colour
                        if nback_level == 0:
                            replacement_colour = zeroback_target
                        # all other n-back levels: replace with random colour that's not the colour of the stimulus at position x+n
                        else:
                            # choose colour you want to use as a replacement
                            replacement_colour = random_colour_list[replace_this_colour - nback_level]

                        # now put this replacement colour in the position of the non-target you want to replace
                        random_colour_list[replace_this_colour] = replacement_colour

                        # you also have a list of target positions - change that one,
                        # too, so there's a False at the current index
                        target[replace_this_colour] = True
                # ---------------------------------------------------------------------------
                #  3.2.2 Case 2: too many targets
                # else if there are too many targets (--> more targets in the list than needed)...
                elif target_count - target_nr > 0:

                    # check how many replacements we need to do
                    nr_replacements = int(get_abs(target_count - target_nr))

                    # find indices of targets in list "target" and replace by non-target colours, also replace True by False in "target" list
                    #indices_targets = [i for i, idx in enumerate(target) if idx == True] # Careful, JS might have problems with the enumerate function / list comprehensions
                    indices_targets = []
                    for t in range(0, len(target)):
                        if target[t] == True:
                            indices_targets.append(t)

                    # select as many of them as need to be replaced
                    idx_replacements = random.sample(indices_targets,
                                                     k = nr_replacements)

                    # loop replacements, get colour n times after the current idx, use different colour as replacement and mutate colour list
                    for replace_this_colour in idx_replacements:

                        # if there is a colour n times after current idx left, make sure you use another one as a replacement
                        if len(random_colour_list)-1 >= replace_this_colour + nback_level:

                            # choose colour you DON'T want to use as a replacement
                            if nback_level == 0:
                                not_this_colour = zeroback_target

                            else:
                                not_this_colour = random_colour_list[replace_this_colour + nback_level]

                            # create list with colour codes that doesn't contain this value, then choose one of those randomly
                            colour_codes_replacements = colour_codes.copy()
                            colour_codes_replacements.remove(not_this_colour)
                            replacement_colour = random.sample(colour_codes_replacements, k = 1)[0]

                        # if not, you can use any colour
                        else: replacement_colour = random.sample(colour_codes, k = 1)[0]

                        # now put this replacement colour in the position of the target you want to remove
                        random_colour_list[replace_this_colour] = replacement_colour

                        # you also have a list of target positions - change that one,
                        # too, so there's a False at the current index
                        target[replace_this_colour] = False

            # ---------------------------------------------------------------------------

            #  4. Check output for unwanted patterns """
            # The number of colours should be balanced (e.g. not way more blue than green),
            # the colours of the targets should be random (e.g. not all targets red)
            # and the change probabilities should be balanced (e.g. probability to change from orange to green)

            # We already made sure the colours are evenly distributed across the list by using our fancy chunk-sampling-system.
            # We changed a few colours afterwards, but I guess that should affect the distribution of the colours over the course of the trials that much.
            # --> maybe run a simulation afterwards to check this.
            # In any case, we have to check the targets and the change probabilities:

            # 4.1 check change probabilities
            # find colour pairs and count their occurances

            pairs = []

            for idx in range(0, len(random_colour_list) - 1):

                # save current colour and next colour as a pair
                curr_colour = random_colour_list[idx] + " -> " + random_colour_list[idx + 1]
                # append it to a list
                pairs.append(curr_colour)

            # count occurances of the unique pairs
            colourpairs_dict = {}
            # loop pairs
            for pair in pairs:
                # if the current pair has an entry already, add 1 to count the occurence
                if pair in colourpairs_dict:
                    colourpairs_dict[pair] = colourpairs_dict[pair] + 1
                # if there's no entry for the pair, create one and set occurence counter to 1
                else:
                    colourpairs_dict[pair] = 1

            # compute mean of occurences, if one of the change probabilities is > mean + 2*SD
            # or < mean - 2*SD, assume that change probabilities are not really balanced
            # compute cutoffs:
            change_prob_cutoff_lower = mean(list( colourpairs_dict.values() )) - 2 * std(list( colourpairs_dict.values() ))
            change_prob_cutoff_upper = mean(list( colourpairs_dict.values() )) + 2 * std(list( colourpairs_dict.values() ))

            # get min and max value to see if the data are in an okayish range
            min_change_prob = minimum(list(colourpairs_dict.values()))
            max_change_prob = maximum(list(colourpairs_dict.values()))

            # check if everything's fine
            if min_change_prob < change_prob_cutoff_lower or max_change_prob > change_prob_cutoff_upper:
                change_prob_equal = False
            else: change_prob_equal = True

            # ---------------------------------------------------------------------------

            # 4.2 check target colour probabilities

            # only get targets, then count occurences for each colour
            #indices_targets = [idx for idx, x in enumerate(target) if x == True]
            indices_targets = []
            for t in range(0, len(target)):
                if target[t] == False:
                    indices_targets.append(t)

            target_colours = [random_colour_list[i] for i in indices_targets]

            # count occurences of target colours
            targetcolours_dict = {}
            for i in target_colours:
                if i in targetcolours_dict:
                    targetcolours_dict[i] += 1
                else:
                    targetcolours_dict[i] = 1

            # same procedure as with the change probabilities (although we don't have as many values)
            # compute mean of occurences, if one of the colours has a probability that is > mean + 2*SD
            # or < mean - 2*SD, assume that target probabilities are not really balanced
            # compute cutoffs:
            target_prob_cutoff_lower = mean(list( targetcolours_dict.values() )) - 2 * std( list(targetcolours_dict.values() ))
            target_prob_cutoff_upper = mean(list( targetcolours_dict.values() )) + 2 * std( list(targetcolours_dict.values() ))

            # get min and max value to see if the data are in an okayish range
            min_target_prob = minimum(list(targetcolours_dict.values()))
            max_target_prob = maximum(list(targetcolours_dict.values()))

            # check if everything's fine
            if min_target_prob < target_prob_cutoff_lower or max_target_prob > target_prob_cutoff_upper:
                target_colours_equal = False
            else:
                target_colours_equal = True

            # ---------------------------------------------------------------------------

            # 4.3 if everything's fine, return colour list and target to non-target ratio
            if target_colours_equal and change_prob_equal:
                #print("finished - returning n-back list now")
                return(random_colour_list, target_nr/len(target))

            # If not: Recursion!
            else:
                return(create_nback_stimlist(nback_level, colour_codes, story, target_abs_min, targets_max, targets_min, zeroback_target))

        # END FUNCTION

        nback_level = 2
        colour_codes = ["red", "blue", "pink", "violet"]
        target_abs_min = 100
        targets_max = 4/10
        targets_min = 2/12
        story = ["word"] * 1000
        zeroback_target = None
        test = create_nback_stimlist(nback_level = nback_level, colour_codes = colour_codes, story = story, target_abs_min = target_abs_min, targets_max = targets_max, targets_min = targets_min, zeroback_target = zeroback_target)
      Begin JS Experiment:
        // function for drawing w/o replacement from list that is
        // smaller than sample you want to draw
        // --> Idea: draw w/o replacement, start over again if you run out of
        //           values, then shuffle your sample
        // draw without replacement from list with sample size > list
        // start over again if no values left for drawing, shuffle everything in the end
        var draw_without_replacement = function(sampling_list, sample_size) {
            // set variables
            var sampling_list, sample_size, rep_sampling_list, rep_times, value, times;
            // repeat colour_codes_list as often as needed
            rep_times = Math.floor((sample_size / sampling_list.length));
            rep_sampling_list = repeat.call(this, value = sampling_list, times = rep_times);

            // check if we need some more values, if yes, draw some randomly
            // from colour_codes and append to our list
            if ((rep_sampling_list.length < sample_size)) {
                var array1, array2, k;
                rep_sampling_list = extend.call(this, array1 = rep_sampling_list, array2 = random_sample.call(this, sampling_list, k = (sample_size - rep_sampling_list.length)));
            }
            // shuffle everything
            rep_sampling_list = random_shuffle.call(this, rep_sampling_list);
            return rep_sampling_list;
        }
        console.log("defined sample w/o replacement function");


        // generate font color n-back stimulus list for given...
        // ... n-back level (= nback_level)
        // ... stimulus list (= colour_codes)
        // ... words (= story)
        // ... min. abs. number of targets (= target_abs_min)
        // ... max. target to non-target ratio (= targets_max)
        // ... min. target to non-target ratio (= targets_min)
        // ﻿... zeroback target stimulus (zeroback_target = None)

        var create_nback_stimlist = function(nback_level, colour_codes, story, target_abs_min, targets_max, targets_min, zeroback_target = null) {

          // set all variables I use in this script
          var nback_level, colour_codes, story, target_abs_min, targets_max, targets_min, zeroback_target,
          sampling_list, sample_size, rep_sampling_list, rep_times,
          change_prob_cutoff_lower, change_prob_cutoff_upper, change_prob_equal,
          chunk_missing, chunk_nr, chunk_size, colour_before, colour_codes_replacements,
          colourpairs_dict, curr_colour, curr_target, found_target_nr, idx_replacements,
          indices_targets, max_change_prob, max_target_prob, min_change_prob, min_target_prob,
          missing_chunk, not_this_colour, nr_replacements, pairs, random_colour_list, rep_colours,
          replacement_colour, start, target, target_colours, target_colours_equal, target_count,
          target_nr, target_prob_cutoff_lower, target_prob_cutoff_upper,
          targetcolours_dict, targets_percent;

          // create pseudorandomized list of colour codes
          // idea: generate small random lists of colour codes with a balanced number of colours, then append them so I get an even distribution of colour codes & even numbers of colour codes over the whole block

          // chunk size should be number of distinct stimuli x 3, so there can't be more than 6x the same stimulus in a row if we concatenate 2 chunks
          chunk_size = colour_codes.length * 3;
          // given the chunk size and the number of stimuli we need, how many chunks do we need?
          chunk_nr = Number.parseInt(story.length / chunk_size);
          // check if there are still stimuli missing that we have to add at the end
          chunk_missing = story.length - chunk_size * chunk_nr;

          // placeholder for the colour list we want to create
          random_colour_list = [];

          // loop whole chunks, generate small stim list, append the lists
          for (var chunk = 0, _pj_a = chunk_nr; chunk < _pj_a; chunk += 1) {
            rep_colours = draw_without_replacement.call(this, sampling_list = colour_codes, sample_size = chunk_size);
            random_colour_list = extend.call(this, random_colour_list, rep_colours);
          }

          // if there are not enough values, randomly sample some and add them
          // to the end of the colour list
          if (chunk_missing > 0) {
            missing_chunk = draw_without_replacement.call(this, sampling_list = colour_codes, sample_size = chunk_missing);
            random_colour_list = extend.call(this, random_colour_list, missing_chunk);
          }

          // count how many targets there are (using the given n-back level)
          target =  [];

          // loop colour list, check if current value matches either a target stimulus (0-back) or the nth previous stimulus (1-back to 3-back)
          for (var colour_idx = 0, _pj_a = random_colour_list.length; colour_idx < _pj_a; colour_idx += 1) {

            if (colour_idx >= nback_level) {
              if (nback_level === 0) {
                curr_colour = random_colour_list[colour_idx];
                // 0-back: if the current colour is a target, save as true in curr_target
                curr_target = curr_colour === zeroback_target;
              } else {
                curr_colour = random_colour_list[colour_idx];
                colour_before = random_colour_list[colour_idx - nback_level];
                // 1-back to 3-back: if the current colour is a target, save as true in curr_target
                curr_target = curr_colour === colour_before;
              }
              // append curr_target to target list
              target = extend.call(this, target, curr_target);
            } else {
              // if it's not a target, save as false
              target = extend.call(this, target, false);
            }
          }

          // count how many targets (aka true values) we have:
          var array, value;
          target_count = count.call(this, array = target, value = true);

          // if we have more targets than min. target ratio and less than max. target ratio and at least the min target count, everything's fine
          if (target_count / target.length >= targets_min && target_count / target.length <= targets_max && target_count >= target_abs_min) {
            target_nr = target_count;
          // if our target count is not in the correct range...
          } else {

            // if we don't have enough targets or too many targets...
            if (target_count / target.length < targets_min || target_count / target.length > targets_max || target_count < target_abs_min) {
              found_target_nr = false;

              // randomly draw a target number to use for adding/taking away targets
              while (found_target_nr === false) {
                var min, max;
                targets_percent = uniform.call(this, min = targets_min, max = targets_max);
                target_nr = Math.floor(story.length * targets_percent);

                if (target_nr >= target_abs_min) {
                  found_target_nr = true;
                }
              }
              // if there are targets missing:
              if (target_count - target_nr < 0) {
                nr_replacements = Number.parseInt(abs(target_count - target_nr));
                indices_targets = [];
                // get indices of random false values in target list
                for (var t = 0, _pj_a = target.length; t < _pj_a; t += 1) {
                  if (target[t] === false) {

                    indices_targets = extend.call(this, indices_targets, t);
                  }
                }
                // if it's a 0-back task, you can start adding targets at the first position of the colour list
                if (nback_level === 0) {
                  start = 0;
                // if it's at least a 1-back, we have to move a few elements down the list to be able to start comparing to predecessors
                } else {
                  start = nback_level - 1;
                }
                var k;
                idx_replacements = random_sample.call(this, indices_targets.slice(start, indices_targets.length), k =  nr_replacements);

                // start replacing non-targets by targets by replacing them either by a target colour or the colour n trials before
                for (var replace_this_colour, _pj_c = 0, _pj_a = idx_replacements, _pj_b = _pj_a.length; _pj_c < _pj_b; _pj_c += 1) {
                  replace_this_colour = _pj_a[_pj_c];

                  // 0-back: replace non-target by target colour
                  if (nback_level === 0) {
                    replacement_colour = zeroback_target;
                  // 1-back to 3-back: replace by colour from n trials before
                  } else {
                    replacement_colour = random_colour_list[replace_this_colour - nback_level];
                  }

                  random_colour_list[replace_this_colour] = replacement_colour;
                  // change non-target to target in target counter list
                  target[replace_this_colour] = true;
                }

              // too many targets, get rid of some
              } else {
                if (target_count - target_nr > 0) {
                  nr_replacements = Number.parseInt(abs(target_count - target_nr));
                  indices_targets = [];
                  // find indices of targets
                  for (var t = 0, _pj_a = target.length; t < _pj_a; t += 1) {

                    if (target[t] === true) {
                      indices_targets = extend.call(this, indices_targets, t);
                    }
                  }
                  // get random indices of targets (as many as we need to replace)
                  idx_replacements = random_sample.call(this, indices_targets, k = nr_replacements);

                  // replace target by non-target colour (aka colour that doesn't match target colour for 0-back or target colour from n trials before (for 1-back to 3-back))
                  for (var replace_this_colour, _pj_c = 0, _pj_a = idx_replacements, _pj_b = _pj_a.length; _pj_c < _pj_b; _pj_c += 1) {
                    replace_this_colour = _pj_a[_pj_c];

                    if (random_colour_list.length - 1 >= replace_this_colour + nback_level) {

                      if (nback_level === 0) {
                        not_this_colour = zeroback_target;
                      } else {
                        not_this_colour = random_colour_list[replace_this_colour + nback_level];
                      }

                      colour_codes_replacements = colour_codes.copy();
                      colour_codes_replacements.remove(not_this_colour);
                      replacement_colour = random_sample.call(this, colour_codes_replacements, k = 1)[0];
                    } else {
                      replacement_colour = random_sample.call(this, colour_codes, k = 1)[0];
                    }

                    random_colour_list[replace_this_colour] = replacement_colour;
                    target[replace_this_colour] = false;
                  }
                }
              }
            }
          }
          // now check if colour transition probabilities are more or less evenly distributed
          var _pj;

          var change_prob_cutoff_lower, change_prob_cutoff_upper, change_prob_equal, curr_colour, idx_pair, idx_target_colour, max_change_prob, max_target_prob, min_change_prob, min_target_prob, pairs, pairs_counter, target_colour, target_colours, target_colours_counter, target_colours_equal, target_prob_cutoff_lower, target_prob_cutoff_upper;

          function _pj_snippets(container) {
            function in_es6(left, right) {
              if (right instanceof Array || typeof right === "string") {
                return right.indexOf(left) > -1;
              } else {
                if (right instanceof Map || right instanceof Set || right instanceof WeakMap || right instanceof WeakSet) {
                  return right.has(left);
                } else {
                  return left in right;
                }
              }
            }

            container["in_es6"] = in_es6;
            return container;
          }

          _pj = {};

          _pj_snippets(_pj);

          pairs = [];
          pairs_counter = [];

          for (var idx = 0, _pj_a = random_colour_list.length - 1; idx < _pj_a; idx += 1) {
            curr_colour = random_colour_list[idx] + " -> " + random_colour_list[idx + 1];

            if (_pj.in_es6(curr_colour, pairs)) {
              idx_pair = pairs.index(curr_colour);
              pairs_counter[idx_pair] += 1;
            } else {
              extend.call(this, pairs, curr_colour);
              extend.call(this, pairs_counter, 1);
            }
          }

          change_prob_cutoff_lower = mean(pairs_counter) - 2 * std(pairs_counter);
          change_prob_cutoff_upper = mean(pairs_counter) + 2 * std(pairs_counter);
          min_change_prob = minimum(pairs_counter);
          max_change_prob = maximum(pairs_counter);

          if (min_change_prob < change_prob_cutoff_lower || max_change_prob > change_prob_cutoff_upper) {
            change_prob_equal = false;
          } else {
            change_prob_equal = true;
          }

          target_colours = [];
          target_colours_counter = [];

          for (var t = 0, _pj_a = target.length; t < _pj_a; t += 1) {
            if (target[t] === true) {
              target_colour = random_colour_list[t];
            }

            if (_pj.in_es6(target_colour, target_colours)) {
              idx_target_colour = target_colours.index(target_colour);
              target_colours_counter[idx_target_colour] += 1;
            } else {
              extend.call(this, target_colours, target_colour);
              extend.call(this, target_colours_counter, 1);
            }
          }

          target_prob_cutoff_lower = mean(target_colours_counter) - 2 * std(target_colours_counter);
          target_prob_cutoff_upper = mean(target_colours_counter) + 2 * std(target_colours_counter);
          min_target_prob = minimum(target_colours_counter);
          max_target_prob = maximum(target_colours_counter);

          if (min_target_prob < target_prob_cutoff_lower || max_target_prob > target_prob_cutoff_upper) {
            target_colours_equal = false;
          } else {
            target_colours_equal = true;
          }

          // if everything's fine...
          if (target_colours_equal && change_prob_equal) {
            // return colour list
            return random_colour_list;
          // if change probabilities or distribution of target colours is not balanced...
          } else {
            // recursion: generate new colour list
            return create_nback_stimlist(nback_level, colour_codes, story, target_abs_min, targets_max, targets_min, zeroback_target);
          }
        }
        console.log("defined nback generator function");


        var story = Array(1000).fill("some_word");
        var nback_level, colour_codes, story, target_abs_min, targets_max, targets_min, zeroback_target;
        var test = create_nback_stimlist.call(this, nback_level = 2, colour_codes = ["r", "b", "g", "y", "o"], story = story, target_abs_min = 100, targets_max = 4/10, targets_min = 2/12, zeroback_target = null);
        test = test[0]
        console.log("defined var test");
    TextComponent loading1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Studie lädt…
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  Routine demogr_onl
    TextComponent loading3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Studie lädt…
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    CodeComponent iframe_2
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('demographics.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['ID'] = psychoJS.experiment._currentTrialData['ID'];
        expInfo['gender'] = psychoJS.experiment._currentTrialData['gender'];
        expInfo['age'] = psychoJS.experiment._currentTrialData['age'];

        expInfo['native_speaker'] = psychoJS.experiment._currentTrialData['native_speaker'];
        expInfo['literacy'] = psychoJS.experiment._currentTrialData['literacy'];
        expInfo['dyslexia'] = psychoJS.experiment._currentTrialData['dyslexia'];
        expInfo['reading_freq'] = psychoJS.experiment._currentTrialData['reading_freq'];
        expInfo['reading_joy'] = psychoJS.experiment._currentTrialData['reading_joy'];

        expInfo['handedness'] = psychoJS.experiment._currentTrialData['handedness'];

        expInfo['impaired_eyesight'] = psychoJS.experiment._currentTrialData['impaired_eyesight'];
        expInfo['impaired_eyesight_correction'] = psychoJS.experiment._currentTrialData['impaired_eyesight_correction'];
        expInfo['colour_blindness'] = psychoJS.experiment._currentTrialData['colour_blindness'];

        expInfo['disease'] = psychoJS.experiment._currentTrialData['disease'];
        expInfo['drugs_last_month'] = psychoJS.experiment._currentTrialData['drugs_last_month'];
        expInfo['alcohol_drugs_now'] = psychoJS.experiment._currentTrialData['alcohol_drugs_now'];

        expInfo['tired'] = psychoJS.experiment._currentTrialData['tired'];
        expInfo['distractions'] = psychoJS.experiment._currentTrialData['distractions'];
  Routine end_excluded
    CodeComponent skip_if_included
      Code Type = Both
      Begin JS Routine:
        // skip this component if participant
        // is eligible to participate in the study

        // get some of the "hard" exclusion criteria
        var age_minor = (expInfo["age"] < 18);
        var non_native = (expInfo["native_speaker"] === false);
        var illiteracy = (expInfo["literacy"] === false);
        var dyslexia = (expInfo["dyslexia"] === true);
        var colourblind = (expInfo["colour_blindness"] === true);
        var disease = (expInfo["disease"] === true);
        var drugs1 = (expInfo["drugs_last_month"] === true);
        var drugs2 = (expInfo["alcohol_drugs_now"] === true);

        var excl_criteria = [age_minor, non_native, illiteracy, dyslexia, colourblind, disease, drugs1, drugs2];

        // skip routine if any of the exclusion criteria apply
        var excl_criteria = [age_minor, non_native, illiteracy, dyslexia, colourblind, disease, drugs1, drugs2];
        var show_this_slide = false;
        for (var criterium, _pj_c = 0, _pj_a = excl_criteria, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            criterium = _pj_a[_pj_c];
            if ((criterium === true)) {
                show_this_slide = true;
            }
        }

        if ((show_this_slide === false)) {
                continueRoutine = false;
            } else {
                continueRoutine = true;
            }
      Begin Routine:
        #skip this component if participant
        # is eligible to participate in the study

        # get some of the "hard" exclusion criteria
        age_minor = expInfo['age'] < 18
        non_native = expInfo['native_speaker'] == False
        illiteracy = expInfo['literacy'] == False
        dyslexia = expInfo['dyslexia'] == True
        colourblind = expInfo['colour_blindness'] == True
        disease = expInfo['disease'] == True
        drugs1 = expInfo['drugs_last_month'] == True
        drugs2 = expInfo['alcohol_drugs_now'] == True

        # skip routine if none of the exclusion criteria apply
        if any([age_minor, non_native, illiteracy,dyslexia, colourblind, disease, drugs1, drugs2]) == True:
            continueRoutine = True
        else: continueRoutine = False
    TextComponent end2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Vielen Dank für Ihr Interesse an unserer Studie!

        Leider erfüllen Sie nicht alle Teilnahmekriterien.

        Sie können dieses Fenster nun schließen.
  Routine instr_1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Vielen Dank für Ihr Interesse an unserer Studie!

        —> Instructions for training go here
  Routine consent_onl
    TextComponent loading2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Studie lädt…
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    CodeComponent iframe_1
      Code Type = JS
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      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('informed_consent.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['consent'] = psychoJS.experiment._currentTrialData['consent'];
  Routine end_no_consent
    CodeComponent skip_if_consented
      Code Type = Both
      Begin JS Routine:
        console.log("starting routine end_no_consent");
        if ((expInfo["consent"] === false)) {
            console.log("continue routine");
            continueRoutine = true;
        } else {
            console.log("end routine");
            continueRoutine = false;
        }
      Begin Routine:
        # skip this component if participant
        # wants to participate in the study
        if expInfo['consent'] == "False":
            continueRoutine = True
        else: continueRoutine = False
    TextComponent end1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Vielen Dank, Sie können dieses Fenster nun schließen!
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Flow
  Routine settings
  Routine consent_onl
  Routine end_no_consent
  Routine demogr_onl
  Routine end_excluded
  Routine instr_1
