PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': '', 'handedness': 'r', 'gender': 'w', 'testing_mode': 'yes'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Units = deg
  Use version = 2021.2.3
  Window size (pixels) = [700, 500]
  color = 0.8824, 0.7490, 0.6000
  expName = EXNAT-2
  keyboardBackend = Pyglet
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Routines
  Routine b2_stim
    CodeComponent code_b2
      Code Type = Both
      Begin JS Routine:
        // if the current block is not the one
        // to run, end it before it starts
        if ((run_task !== 2)) {
            loop_b2.finished = true;
        }
        // loop words of story 2
        if ((story_counter < story_2.length)) {
            // display current word
            curr_word_b2 = story_2[story_counter];
            // move on to the next word in the next trial
            story_counter = (story_counter + 1);
        }
      Begin Routine:
        # if the current block is not the one
        # to run, end it before it starts
        if run_task != 2:
            loop_b2.finished = True

        # loop words of story 2
        if (story_counter < len(story_2)):
            # display current word
            curr_word_b2 = story_2[story_counter]
            # move on to the next word in the next trial
            story_counter = story_counter + 1
      End JS Routine:
        // save which word was shown
        psychoJS.experiment.addData("word", curr_word_b2);

        // also save SDT response category
        // (aka if it was a hit (target + reaction),
        // a miss (target, but no reaction),
        // a correct rejection (no target + no reaction)
        // or a false alarm (no target, but reaction))

        // Hit:
        // if there was a target and the participant reacted
        if (((target === true) && (response_b2.keys === "a"))) {
            reaction_category = "hit";
        // Miss:
        // if there was a target but no reaction
        } else {
            if (((target === true) && (response_b2.keys === "space"))) {
                reaction_category = "miss";
        // Correct Rejection:
        // if there was no target and no reaction
            } else {
                if (((target === false) && (response_b2.keys === "space"))) {
                    reaction_category = "correct rejection";
        // False Alarm:
        // if there was no target but a reaction
                } else {
                    if (((target === false) && (response_b2.keys === "a"))) {
                        reaction_category = "false alarm";
                    }
                }
            }
        }
        // save response category
        psychoJS.experiment.addData("resp_category", reaction_category);
      End Routine:
        # save which word was shown
        thisExp.addData('word', curr_word_b2)

        # also save SDT response category
        # (aka if it was a hit (target + reaction),
        # a miss (target, but no reaction),
        # a correct rejection (no target + no reaction)
        # or a false alarm (no target, but reaction))

        # Hit:
        # if there was a target and the participant reacted
        if target == True and response_b2.keys == "a":
            reaction_category = "hit"
        # Miss:
        # if there was a target but no reaction
        elif target == True and response_b2.keys == "space":
            reaction_category = "miss"
        # Correct Rejection:
        # if there was no target and no reaction
        elif target == False and response_b2.keys == "space":
            reaction_category = "correct rejection"
        # False Alarm:
        # if there was no target but a reaction
        elif target == False and response_b2.keys == "a":
            reaction_category = "false alarm"

        # save response category
        thisExp.addData('resp_category', reaction_category)
    TextComponent words_b2
      color [set every repeat] = $color_code
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $curr_word_b2
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    KeyboardComponent response_b2
      allowedKeys = 'space', 'a'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent end_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für Ihre Teilnahme am Experiment!

        Sie können das Experiment nun schließen, indem Sie die Leertaste drücken.
  Routine training_word
  Routine sett_curr_trial
    CodeComponent settings_curr_run
      Code Type = Py
      disabled = True
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      Begin Routine:
        # specify settings for the current run

        # get current word & colour & info on whether it's a target trial
        curr_colour = all_colour_lists[exp_block_counter][exp_trial_counter]
        curr_block_kind = all_block_kinds[exp_block_counter][exp_trial_counter]
        curr_target = all_targets[exp_block_counter][exp_trial_counter]
        curr_text_nr = all_texts_nrs_list[exp_block_counter]
        curr_word = all_texts_list[exp_block_counter][exp_trial_counter]
      End Routine:
        ### send word offset trigger
        pass

        #--------------------------------

        ### save data for this trial

        # get reaction time for this slide
        curr_duration = pass

        # save everything in output
        exp.addData('word', curr_word)
        exp.addData('colour', curr_colour)
        exp.addData('target', curr_target)
        exp.addData('block_kind', curr_block_kind)
        exp.addData('duration', curr_duration)

        # end of trial - move to next line in data output
        #exp.nextEntry()

        #--------------------------------

        ### prepare next trial
  Routine text_rating
    CodeComponent difficulty_rating
      Code Type = Py
      Begin Routine:
        # end of the block, so we have to add 1 to the block counter
        exp_block_counter = exp_block_counter + 1

        # keep background ivory
        win.Color = light_bg_col
        win.flip()

        # if it's a reading bl block, get text
        # difficulty rating, if not, skip this routine
        if curr_block[0] != "Reading_Baseline_main":
            continueRoutine = False
        else:
    SliderComponent slider
      borderColor = black
      color = black
      fillColor = 0.1216, 0.4745, 0.1216
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = ("sehr leicht", "sehr schwierig")
      letterHeight = 0.05
      pos = (0, -4)
      size = (1, 1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0,100)
      units = deg
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    KeyboardComponent end_rating
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine settings_2
    CodeComponent prep_functions
      Code Type = Py
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      Begin Experiment:
        ### import packages:

        # for setting the output encoding to UTF-8
        import sys
        # --> if you don't do this, German "Umlaute" can't be displayed correctly:
        sys.stdout = open(sys.stdout.fileno(), mode = 'w', encoding = 'utf8', buffering = 1)

        # for getting current date & time:
        import datetime
        # numpy for being able to calculate
        import numpy as np
        # for random number generator:
        import random
        # for saving data in csv:
        import pandas as pd
        # additional timing package (I know we have core.wait, but I also want this one)
        import time
        # pylsl for pushing triggers to lsl stream:
        # from pylsl import StreamInlet, resolve_stream, StreamOutlet, StreamInfo
        # for connecting to serial ports:
        # import serial


        # from my custom scripts...
        # import all texts
        from EXNAT2_texts_MC_Qs import *
        # import some additional functions I wrote for the experiment:
        from EXNAT2_study_components import change_bg_colour
        from nback_colour_generator import create_nback_stimlist, draw_without_replacement, get_targets

        # build little function to flatten nested lists:
        def flatten_list(nested_list):
            flattened_list = []
            for item in nested_list:
                if isinstance(item, list):
                    flattened_list.extend(flatten_list(item))
                else:
                    flattened_list.append(item)
            return flattened_list


        ### Setup LSL Stream
        print("create trigger stream")
        # Create trigger stream:
        #global out_marker
        #info_marker_stream = StreamInfo('PsychoPyMarkers', 'Marker', 1, 0, 'string')
        #out_marker = StreamOutlet(info_marker_stream)
        #out_marker.push_sample(["TEST MARKER"])
    CodeComponent set_stimuli
      Code Type = Py
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      Begin Experiment:
        ### Stimulus settings

        # set colours you want to use for background:
        light_bg_col = (240, 223, 204) # ivory instructions background
        dark_bg_col  = (10, 10, 10)    # dark grey trials background

        # set colours you want to use for the stimuli:
        colours = ["#D292F3", "#F989A2", "#2AB7EF", "#88BA3F"]
        print("Preparing experiment with n-back colours:", colours)

        #  #D292F3 = weird lilac with a 2000s vibe
        #  #F989A2 = bubblegum pink
        #  #2AB7EF = Twitter blue
        #  #88BA3F = medium grass green
        # (#D8A244 = dark curry-ish yellow --> excluded!)

        #   All colours have a luminance of 70 and a chroma of 74.

        #   The colours are selected for distinguishability (is that a word?!)
        #   for people with "normal" colour vision as well as for
        #   people with protanomaly (red olour vision deficiency (CVD)),
        #   deuteranomaly (green CVD) and
        #   tritanomaly (blue CVD).

        #   People with a "true" colour blindness
        #   (i.e. protanopia, deuteranopia, tritanopia)
        #   shouldn't participate in this study. */


        # ----------------------------------------------
        ### Shuffle order of texts
        print("shuffle texts")
        # collect the text IDs in lists so I know which text was shown
        all_main_texts_nrs_list = ["text_01", "text_02", "text_03", "text_04", "text_05", "text_06", "text_07", "text_08", "text_09"]
        # shuffle text numbers
        random.shuffle(all_main_texts_nrs_list)
        # append "empty" text numbers to the list where we have blocks that are not main blocks.
        all_texts_nrs_list = []
        for t_idx, t in enumerate(all_main_texts_nrs_list):
            # if it's the first text, it's the reading BL main block.
            # Append 1 empty text number before text (for the reading BL training)
            # and 4 after text (for click training, 2x single task training & 1x single task main)
            if t_idx == 0:
                all_texts_nrs_list = all_texts_nrs_list + ["", t, "", "", "", ""]
            # the second text is the first n-back block.
            # There are 3 "empty" blocks after it (2x single task training & 1x single task main)
            elif t_idx == 1:
                all_texts_nrs_list = all_texts_nrs_list + [t, "", "", ""]
            # all following texts are main blocks and can be appended to all_texts_nrs_list
            elif t_idx > 1:
                all_texts_nrs_list.append(t)

        print(all_texts_nrs_list)

        ### Set order of blocks
        print("set block order")
        # The first blocks should be:
        # - reading baseline + training
        # - click training
        # - in random order: 1-back (2x single task training & 1x main & 1x dual task main) & 2-back (2x single task training & 1x main & 1x dual task main)
        # - in random order: 2x reading BL main, 2x 1-back main, 2x 2-back main

        # this always comes first in the experiment
        Reading_BL = ["Reading_Baseline_training", "Reading_Baseline_main", "click_training"]

        # then you get both n-back conditions with trainings (which of them is first is randomized)
        oneback = ["1back_single_training1", "1back_single_training2", "1back_single_main", "1back_dual_main"]
        twoback = ["2back_single_training1", "2back_single_training2", "2back_single_main", "2back_dual_main"]

        # shuffle the order of the 2 lists
        main_blocks1 = [oneback, twoback]
        random.shuffle(main_blocks1)

        # flatten nested list
        main_blocks1 = flatten_list(main_blocks1)

        # now shuffle order of the last 6 main blocks:
        main_blocks2 = ["Reading_Baseline_main", "Reading_Baseline_main", "1back_dual_main",
                        "1back_dual_main", "2back_dual_main", "2back_dual_main"]
        random.shuffle(main_blocks2)

        # put them all together:
        #global all_blocks
        all_blocks = Reading_BL + main_blocks1 + main_blocks2

        ### Create n-back colour lists for all blocks

        print("create n-back colour lists")
        # The reading bl training text has 159 trials.

        # The click training has 6 trials.

        # Then we also have 4 short training blocks à 20 trials each (5 targets)
        # 4 * single training

        # We have 2 single-task main blocks,
        # one for 1-back and 1 for 2-back à 60 trials each (10 targets):
        # 2 * single main

        # There are 9 dual-task main blocks à 300 stimuli each (50 targets)
        # reading bl * 3
        # 1-back * 3
        # 2-back * 3

        # --> all in all, 15 blocks

        # So for every block, build a list with colour codes containing the right amount of targets.
        # The function is defined in another script bc it's super long,
        # I import it at the beginning of this script.

        # First, create list with length of all texts. The length of the blocks is
        # always in the same order, only the conditions change.
        blocks_textlen = [159, 300, 6, # reading bl blocks + click training
                          20, 60, 60, 300, 20, 60, 60, 300, # main blocks 1 + trainings & single tasks
                          300, 300, 300, 300, 300, 300] # main blocks 2
        blocks_target_counts = [25, 50, 1, # reading bl blocks + click training
                                5, 10, 10, 50, 5, 10, 10, 50, # main blocks 1 + trainings & single tasks
                                50, 50, 50, 50, 50, 50]
        # Now loop this list. Check which condition we have there and the create colour list for each text.
        all_colour_lists = []
        all_target_lists = []
        for block_idx, block_length in enumerate(blocks_textlen):
            # get 1st letter of block name - that tells us the condition
            block_cond = all_blocks[block_idx][0]

            # for each condition, decide which n-back level we want to assign
            # For all no-n-back blocks, we use 1 (just for the colour list generation)
            #global curr_nback_level
            if block_cond == "R":
                curr_nback_level = 1
            elif block_cond == "c":
                curr_nback_level = 1
            elif block_cond == "1":
                curr_nback_level = 1
            else: curr_nback_level = 2

            # generate colour list for current block
            #global curr_colours
            curr_colours = create_nback_stimlist(nback_level = curr_nback_level,
                                                 colour_codes = colours,
                                                 story = ["x"] * block_length,
                                                 target_abs_min = blocks_target_counts[block_idx],
                                                 target_abs_max = blocks_target_counts[block_idx],
                                                 zeroback_target = None)

            # get list of targets / non-targets
            curr_targets = get_targets(stim_list = curr_colours,
                                       nback_level = curr_nback_level)

            # add to bigger lists
            all_colour_lists.append(curr_colours)
            all_target_lists.append(curr_targets)

        print("------ finished preparing stimuli! ------")


        # ------------------------------------------

        # init block counter for the whole experiment
        exp_block_counter = 0

        print("starting experiment now!")
    TextComponent empty_placeholder
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Q1
    CodeComponent code_Q1
      Code Type = Py
      Begin Routine:
        ##########################################################
        #            Text Comprehension Questions - Q1           #
        ##########################################################

        ### Settings:
        # keep background ivory
        win.Color = light_bg_col
        win.flip()

        # clear buffer of all previously recorded key events:
        event.clearEvents()

        # check which kind of block we have
        # if there was no text before, we can skip the questions
        if skip_questions:
            continueRoutine = False
        # if we have a training text, set training questions
        elif skip_questions == False and training_Qs:
            Q1 = reading_bl_tr_Q1
            Q1_answers = reading_bl_tr_Q1_ans
            Q1_corr = reading_bl_tr_Q1_corr

        # if we have a main text, set regular questions
        elif skip_questions == False and training_Qs == False:
            # load first question for current text & their respective answers
            Q1 = locals()[curr_text_nr + "_Q1"]
            Q1_answers = locals()[curr_text_nr + "_Q1_ans"]
            Q1_corr = locals()[curr_text_nr + "_Q1_corr"]

        # Define text positions and formatting
        question_pos = (0, 3)
        answer_xpos = -3 # move questions a bit to the left
        answer_ypos = [ 0, -2, -4, -6] # set the y axis positions of all 4 answers

        # Create text stim for the question:
        question = visual.TextStim(win,
                                   text = Q1,
                                   pos = question_pos,
                                   color = "black",
                                   height = 0.6,
                                   font = "Bookman Old Style",
                                   anchorHoriz = 'center',
                                   alignText = 'center',
                                   wrapWidth = 10)
        # create 1 text stim for each answer option:
        answers = [visual.TextStim(win,
                                   text = Q1_answers[i],
                                   pos = (answer_xpos, answer_ypos[i]),
                                   color = "black", # set all to black as a default
                                   height = 0.5,
                                   font = "Bookman Old Style",
                                   wrapWidth = 15,
                                   anchorHoriz = 'left',
                                   alignText = 'center') for i in range(len(Q1_answers))]

        ### Show all on screen until I set .autoDraw = False
        question.autoDraw = True
        for answer in answers:
            answer.autoDraw = True
        win.flip()


        ### Record key responses:
        Q1_chosen_ans = None

        while True:
            # if 1 was pressed...
            if event.getKeys(['1']):
                print('a')
                # save Q1 answer as a
                Q1_chosen_ans = "a"
                # set font colour of the first answer (answer a) to
                # green and the rest to black:
                answers[0].setColor("green")
                for answer in answers[1:]:
                    answer.setColor("black")
                    # draw updated stimulus:
                    win.flip()
            # same procedure for all other answer options:
            if event.getKeys(['2']):
                print('b')
                Q1_chosen_ans = "b"
                # set font colour of the second answer (answer b) to
                # green and the rest to black:
                answers[1].setColor("green")
                for answer in [answers[0]] + answers[2:]:
                    answer.setColor("black")
                    # draw updated stimulus:
                    win.flip()
            if event.getKeys(['3']):
                print('c')
                Q1_chosen_ans = "c"
                # set font colour of the third answer (answer c) to
                # green and the rest to black:
                answers[2].setColor("green")
                for answer in answers[:2] + answers[3:]:
                    answer.setColor("black")
                # draw updated stimulus:
                win.flip()
            if event.getKeys(['4']):
                print('d')
                Q1_chosen_ans = "d"
                # set font colour of the fourth answer (answer d) to
                # green and the rest to black:
                answers[3].setColor("green")
                for answer in answers[:-1]:
                    answer.setColor("black")
                # draw updated stimulus
                win.flip()
            # if participant pressed "space", check whether they chose an answer.
            # if yes, end this routine and go to next question, if not, wait for valid answer.
            elif event.getKeys(['space']) and Q1_chosen_ans != None:
                break

        # print chosen answer for Q1
        print("answer for Q1:" + str(Q1_chosen_ans))

        # check if answer was correct:
        if Q1_chosen_ans == Q1_corr:
            print("answer correct!")
        else:
            print("answer incorrect!")

        # save data:
        thisExp.addData('question', 'Q1')
        thisExp.addData('chosen_ans', Q1_chosen_ans)
        thisExp.addData('ans_correct', Q1_chosen_ans == Q1_corr)
        thisExp.addData('block_kind', curr_nback_cond)
        thisExp.addData('text_nr', curr_text_nr)
        thisExp.addData('block_nr', curr_block)
        # start a new row in the csv
        thisExp.nextEntry()

        ### End Q1: Set .autoDraw = False to stop showing question & answers
        question.autoDraw = False
        for answer in answers:
            answer.autoDraw = False

        # end current routine
        continueRoutine = False
  Routine Q2
    CodeComponent code_Q2
      Code Type = Py
      Begin Routine:
        ##########################################################
        #            Text Comprehension Questions - Q2           #
        ##########################################################

        ### Settings:
        # keep background ivory
        win.Color = light_bg_col
        win.flip()

        # clear buffer of all previously recorded key events:
        event.clearEvents()

        # check which kind of block we have
        # if there was no text before, we can skip the questions
        if skip_questions:
            continueRoutine = False
        # if we have a training text, set training questions
        elif skip_questions == False and training_Qs:
            Q2 = reading_bl_tr_Q2
            Q2_answers = reading_bl_tr_Q2_ans
            Q2_corr = reading_bl_tr_Q2_corr

        # if we have a main text, set regular questions
        elif skip_questions == False and training_Qs == False:
            # load first question for current text & their respective answers
            Q2 = locals()[curr_text_nr + "_Q2"]
            Q2_answers = locals()[curr_text_nr + "_Q2_ans"]
            Q2_corr = locals()[curr_text_nr + "_Q2_corr"]

        # Define text positions and formatting
        question_pos = (0, 3)
        answer_xpos = -3 # move questions a bit to the left
        answer_ypos = [ 0, -2, -4, -6] # set the y axis positions of all 4 answers

        # Create text stim for the question:
        question = visual.TextStim(win,
                                   text = Q2,
                                   pos = question_pos,
                                   color = "black",
                                   height = 0.6,
                                   font = "Bookman Old Style",
                                   anchorHoriz = 'center',
                                   alignText = 'center',
                                   wrapWidth = 10)
        # create 1 text stim for each answer option:
        answers = [visual.TextStim(win,
                                   text = Q2_answers[i],
                                   pos = (answer_xpos, answer_ypos[i]),
                                   color = "black", # set all to black as a default
                                   height = 0.5,
                                   font = "Bookman Old Style",
                                   wrapWidth = 15,
                                   anchorHoriz = 'left',
                                   alignText = 'center') for i in range(len(Q1_answers))]

        ### Show all on screen until I set .autoDraw = False
        question.autoDraw = True
        for answer in answers:
            answer.autoDraw = True
        win.flip()


        ### Record key responses:
        Q2_chosen_ans = None

        while True:
            # if 1 was pressed...
            if event.getKeys(['1']):
                print('a')
                # save Q1 answer as a
                Q1_chosen_ans = "a"
                # set font colour of the first answer (answer a) to
                # green and the rest to black:
                answers[0].setColor("green")
                for answer in answers[1:]:
                    answer.setColor("black")
                    # draw updated stimulus:
                    win.flip()
            # same procedure for all other answer options:
            if event.getKeys(['2']):
                print('b')
                Q1_chosen_ans = "b"
                # set font colour of the second answer (answer b) to
                # green and the rest to black:
                answers[1].setColor("green")
                for answer in [answers[0]] + answers[2:]:
                    answer.setColor("black")
                    # draw updated stimulus:
                    win.flip()
            if event.getKeys(['3']):
                print('c')
                Q1_chosen_ans = "c"
                # set font colour of the third answer (answer c) to
                # green and the rest to black:
                answers[2].setColor("green")
                for answer in answers[:2] + answers[3:]:
                    answer.setColor("black")
                # draw updated stimulus:
                win.flip()
            if event.getKeys(['4']):
                print('d')
                Q1_chosen_ans = "d"
                # set font colour of the fourth answer (answer d) to
                # green and the rest to black:
                answers[3].setColor("green")
                for answer in answers[:-1]:
                    answer.setColor("black")
                # draw updated stimulus
                win.flip()
            # if participant pressed "space", check whether they chose an answer.
            # if yes, end this routine and go to next question, if not, wait for valid answer.
            elif event.getKeys(['space']) and Q1_chosen_ans != None:
                break

        # print chosen answer for Q2
        print("answer for Q2:" + str(Q2_chosen_ans))

        # check if answer was correct:
        if Q2_chosen_ans == Q2_corr:
            print("answer correct!")
        else:
            print("answer incorrect!")

        # save data:
        thisExp.addData('question', 'Q2')
        thisExp.addData('chosen_ans', Q2_chosen_ans)
        thisExp.addData('ans_correct', Q2_chosen_ans == Q2_corr)
        thisExp.addData('block_kind', curr_nback_cond)
        thisExp.addData('text_nr', curr_text_nr)
        thisExp.addData('block_nr', curr_block)
        # start a new row in the csv
        thisExp.nextEntry()

        ### End Q2: Set .autoDraw = False to stop showing question & answers
        question.autoDraw = False
        for answer in answers:
            answer.autoDraw = False

        # end current routine
        continueRoutine = False
  Routine Q3
    CodeComponent code_Q3
      Code Type = Py
      Begin Routine:
        ##########################################################
        #            Text Comprehension Questions - Q3           #
        ##########################################################

        ### Settings:
        # keep background ivory
        win.Color = light_bg_col
        win.flip()

        # clear buffer of all previously recorded key events:
        event.clearEvents()

        # check which kind of block we have
        # if there was no text before, we can skip the questions
        if skip_questions:
            continueRoutine = False
        # if we have a training text, set training questions
        elif skip_questions == False and training_Qs:
            Q3 = reading_bl_tr_Q3
            Q3_answers = reading_bl_tr_Q3_ans
            Q3_corr = reading_bl_tr_Q3_corr

        # if we have a main text, set regular questions
        elif skip_questions == False and training_Qs == False:
            # load first question for current text & their respective answers
            Q3 = locals()[curr_text_nr + "_Q3"]
            Q3_answers = locals()[curr_text_nr + "_Q3_ans"]
            Q3_corr = locals()[curr_text_nr + "_Q3_corr"]

        # Define text positions and formatting
        question_pos = (0, 3)
        answer_xpos = -3 # move questions a bit to the left
        answer_ypos = [ 0, -2, -4, -6] # set the y axis positions of all 4 answers

        # Create text stim for the question:
        question = visual.TextStim(win,
                                   text = Q3,
                                   pos = question_pos,
                                   color = "black",
                                   height = 0.6,
                                   font = "Bookman Old Style",
                                   anchorHoriz = 'center',
                                   alignText = 'center',
                                   wrapWidth = 10)
        # create 1 text stim for each answer option:
        answers = [visual.TextStim(win,
                                   text = Q3_answers[i],
                                   pos = (answer_xpos, answer_ypos[i]),
                                   color = "black", # set all to black as a default
                                   height = 0.5,
                                   font = "Bookman Old Style",
                                   wrapWidth = 15,
                                   anchorHoriz = 'left',
                                   alignText = 'center') for i in range(len(Q1_answers))]

        ### Show all on screen until I set .autoDraw = False
        question.autoDraw = True
        for answer in answers:
            answer.autoDraw = True
        win.flip()


        ### Record key responses:
        Q3_chosen_ans = None

        while True:
            # if 1 was pressed...
            if event.getKeys(['1']):
                print('a')
                # save Q3 answer as a
                Q1_chosen_ans = "a"
                # set font colour of the first answer (answer a) to
                # green and the rest to black:
                answers[0].setColor("green")
                for answer in answers[1:]:
                    answer.setColor("black")
                    # draw updated stimulus:
                    win.flip()
            # same procedure for all other answer options:
            if event.getKeys(['2']):
                print('b')
                Q1_chosen_ans = "b"
                # set font colour of the second answer (answer b) to
                # green and the rest to black:
                answers[1].setColor("green")
                for answer in [answers[0]] + answers[2:]:
                    answer.setColor("black")
                    # draw updated stimulus:
                    win.flip()
            if event.getKeys(['3']):
                print('c')
                Q1_chosen_ans = "c"
                # set font colour of the third answer (answer c) to
                # green and the rest to black:
                answers[2].setColor("green")
                for answer in answers[:2] + answers[3:]:
                    answer.setColor("black")
                # draw updated stimulus:
                win.flip()
            if event.getKeys(['4']):
                print('d')
                Q1_chosen_ans = "d"
                # set font colour of the fourth answer (answer d) to
                # green and the rest to black:
                answers[3].setColor("green")
                for answer in answers[:-1]:
                    answer.setColor("black")
                # draw updated stimulus
                win.flip()
            # if participant pressed "space", check whether they chose an answer.
            # if yes, end this routine and go to next question, if not, wait for valid answer.
            elif event.getKeys(['space']) and Q1_chosen_ans != None:
                break

        # print chosen answer for Q3
        print("answer for Q3:" + str(Q3_chosen_ans))

        # check if answer was correct:
        if Q3_chosen_ans == Q3_corr:
            print("answer correct!")
        else:
            print("answer incorrect!")

        # save data:
        thisExp.addData('question', 'Q3')
        thisExp.addData('chosen_ans', Q3_chosen_ans)
        thisExp.addData('ans_correct', Q3_chosen_ans == Q3_corr)
        thisExp.addData('block_kind', curr_nback_cond)
        thisExp.addData('text_nr', curr_text_nr)
        thisExp.addData('block_nr', curr_block)
        # start a new row in the csv
        thisExp.nextEntry()

        ### End Q3: Set .autoDraw = False to stop showing question & answers
        question.autoDraw = False
        for answer in answers:
            answer.autoDraw = False

        # end current routine
        continueRoutine = False
  Routine r_bl_training
  Routine no_text_blocks
    CodeComponent code_rectangles
      Code Type = Py
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      Begin Routine:
        #################################################
        #                Blocks w/o text                #
        #################################################
        # this routine is for all blocks where there are
        # coloured rectangles instead of words

        # the non-text blocks all come in succession, there's just 1 main block in between them.
        # So use loop here that runs the non-text blocks
        # until we have to display a main text block (in this case we exit the routine).
        while True:
            # keep background ivory
            win.Color = light_bg_col
            win.flip()

            # clear buffer of all previously recorded key events:
            event.clearEvents()

            ### specify settings for the current block

            ### Prepare stimuli:

            # get block kind
            curr_block = all_blocks[exp_block_counter]
            print("start preparing block " + curr_block)

            # Check whether it's one of the non-text tasks.
            # If current block is a text block, skip this routine and go to the next.
            if curr_block not in ["click_training", "1back_single_training1", "1back_single_training2",
                              "1back_single_main", "2back_single_training1", "2back_single_training2", "2back_single_main"]:
                print("skipping current routine")
                break

            # if it's one of the non-text blocks, though, prepare stimuli:
            else:
                print(curr_block + " is not a text block - preparing rect as stim now")

                # keep background ivory
                win.Color = light_bg_col
                win.flip()

                ### Show instructions
                # set instruction text
                instr_text = locals()["instr_" + curr_block]
                # create text box
                instr_text_stim = visual.TextStim(win,
                                                 text = instr_text,
                                                 height = 0.5,
                                                 pos = (0, 0),
                                                 font = "Bookman Old Style",
                                                 color = 'black')
                # display the text on screen
                if curr_block in ["1back_single_training2", "2back_single_training2"]:
                    while True:
                        instr_text_stim.draw()
                        win.flip()
                        # skip current block (aka the second training block))
                        if event.getKeys(['space']):
                            print("start next block - skip second training block")
                            skip_curr_block = True
                            break
                        # repeat training (aka run current block, which is the second training block)
                        elif event.getKeys(['w']):
                            print("repeat training block")
                            skip_curr_block = False
                            break
                # for regular blocks that can't be repeated:
                else:
                    while True:
                        instr_text_stim.draw()
                        win.flip()
                        # start current block
                        if event.getKeys(['space']):
                            print("start current block")
                            skip_curr_block = False
                            break

                # only run this if the current block shall not be skipped:
                if skip_curr_block == False:
                    ### change background colour
                    # transition from white (RGB: 255, 255, 255)
                    # to medium grey (RGB: 10, 10, 10)
                    change_bg_colour(window = win,
                                     start_rgb = light_bg_col,
                                     end_rgb = dark_bg_col,
                                     seconds = 2)
                    # Wait for a brief period of time so bg is set
                    core.wait(0.8)
                    # keep background grey
                    win.Color = dark_bg_col
                    win.flip()

                    # don't show questions
                    skip_questions = True
                    training_Qs = False

                    # get n-back condition:
                    curr_nback_cond = curr_block[0] # get first character of block name

                    # if it is a 1 or a 2, set that as current n-back level:
                    if curr_nback_cond in [1, 2]:
                        curr_nback_cond == int(curr_nback_cond)
                    # if it's neither 1 nor 2, it has to be a block without n-back,
                    # so set curr_nback_cond to None
                    else:
                        curr_nback_cond = None

                    # get list with targets & list with colours
                    curr_targets = all_target_lists[exp_block_counter]
                    curr_colours = all_colour_lists[exp_block_counter]
                    # for current text nr, get text whose name = current text nr
                    curr_text = locals()[curr_text_nr]

                    # start block loop

                    # create empty text stimulus
                    stim = visual.Rect(win = win,
                                       width = 3, # width = 3 * 1° visual angle (to make it look rectangle-ish)
                                       height = 1, # height = 1° visual angle (just like words)
                                       pos = (0,0), # center stimulus
                                       fillColor = 'green')

                    # set the flicker rate to 10 Hz
                    #stim.flicker(frequency = 10)

                    stim.draw()
                    win.flip()

                    # clear buffer of all previously recorded key events:
                    event.clearEvents()

                    # loop colours in current text
                    for trial_idx, curr_col in enumerate(curr_colours):
                        print("current idx: " + str(trial_idx) + ", curr colour:" + curr_col)

                        ### prepare & show current word:

                        # if it's a block with an n-back task, prepare target list
                        if curr_nback_cond != None:
                            curr_target = curr_targets[trial_idx]
                            saw_target = False

                        # get trial number (start counting from 1, so add 1)
                        curr_trial_nr = trial_idx + 1

                        ### ISI: wait for 100 ms
                        while core.getTime() < onset_time + 0.1:
                            # draw the stimulus during the waiting period,
                            # but use grey as a fill colour
                            stim.Colour = dark_bg_col
                            stim.draw()
                            win.flip()

                        # set current colour as colour of rectangle
                        stim.fillColor = curr_col

                        # show stimulus on screen
                        stim.draw() # draw stimulus on screen
                        win.flip() # update the window to clear the screen and display the stimulus

                        # send word onset trigger to LSL stream
                        marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_col
                        #out_marker.push_sample(["STIM_ONSET_" + marker_text])

                        # record trial onset time
                        onset_time = core.getTime()
                        print(onset_time)

                        ### wait for key response:
                        # In blocks with n-back task, participants can press "c" to indicate they saw a target colour and "space" to go to the next word/stimulus.
                        # In blocks without n-back task, participants can only press "space" to go to the next stimulus.
                        print("start tracking key responses")

                        ### start recording responses
                        # start "endless" while loop that looks for responses
                        while True:
                            # in each iteration, draw word on screen
                            stim.draw()
                            win.flip()

                            # if participant presses space bar on their keyboard...
                            if event.getKeys(['space']):
                                # get reaction time
                                curr_duration = core.getTime() - onset_time
                                ### send trigger to LSL stream to indicate participant wants to go to next word
                                marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_col
                                #out_marker.push_sample(["REACTION_NEXT_STIM_" + marker_text])
                                print("detected space key press -- RT: " + str(curr_duration))
                                # break while loop
                                break

                            # if participant pressed button "c" for the first time and it's an n-back condition
                            # where they're actually supposed to do that (aka not a reading baseline condition)...
                            elif event.getKeys(['c']) and curr_nback_cond != None and saw_target == False:
                                # get reaction time
                                curr_nback_RT = onset_time - core.getTime()
                                ### send trigger to LSL stream to indicate n-back response
                                marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_col
                                #out_marker.push_sample(["NBACK_REACTION_" + marker_text])
                                # only get first target response, we don't care if they press the button more than once:
                                saw_target = True
                                print("detected C key press -- n-back RT: " + str(curr_nback_RT))
                            # If esc is pressed, end the experiment:
                            elif event.getKeys(['escape']):
                                core.quit()

                        ### end trial
                        print("end trial")
                        # stop display of current word
                        win.flip()

                        # check whether response was hit, miss, false alarm or correct rejection
                        # they saw a target and there was one: hit
                        if curr_nback_cond != None:
                            if saw_target and curr_target:
                                curr_nback_response = "hit"
                            # they didn't see a target but there was one: miss
                            elif saw_target == False and curr_target:
                                curr_nback_response = "miss"
                                curr_nback_RT = None
                            # they didn't see a target and there was none: correct rejection
                            elif saw_target == False and curr_target == False:
                                curr_nback_response = "correct rejection"
                                curr_nback_RT = None
                            # they saw a target but there was none: false alarm
                            elif saw_target and curr_target == False:
                                curr_nback_response = "false alarm"
                        # if it wasn't an n-back task block:
                        else:
                            curr_target = None
                            curr_nback_response = None
                            curr_nback_RT = None

                        ### save everything in output csv
                        thisExp.addData('colour', curr_colour)
                        thisExp.addData('target', curr_target)
                        thisExp.addData('nback_response', curr_nback_response)
                        thisExp.addData('nback_RT', curr_nback_RT)
                        thisExp.addData('block_kind', curr_nback_cond)
                        thisExp.addData('duration', curr_duration)
                        thisExp.addData('block_nr', curr_block)
                        thisExp.addData('trial_nr', curr_trial_nr)
                        # start a new row in the csv
                        thisExp.nextEntry()

                        ### IF TESTING MODE ENABLED: end loop after 4 trials
                        if expInfo['testing_mode'] == "yes":
                            if trial_idx == 3:
                                break

                        ### send stimulus offset trigger to LSL stream
                        marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word + "_" + curr_colour + "_" + str(curr_nback_response)
                        #out_marker.push_sample(["STIM_OFFSET_" + marker_text])

                    print("finished presenting trials")

                    # change background colour from grey (RGB: 10, 10, 10)
                    # to ivory (RGB: 240, 223, 204)
                    change_bg_colour(window = win,
                                     start_rgb = dark_bg_col,
                                     end_rgb = light_bg_col,
                                     seconds = 2)
                    # Wait for a brief period of time so bg is set
                    core.wait(0.8)
                    # keep background ivory
                    win.Color = light_bg_col
                    win.flip()

                ### End currrent block
                # add 1 to the block counter to go load the next block
                exp_block_counter = exp_block_counter + 1

        # go to next routine
        continueRoutine = False
  Routine text_blocks
    CodeComponent code_text
      Code Type = Py
      Begin Routine:
        #################################################
        #                Blocks with text               #
        #################################################
        # this routine is for all blocks with texts

        # keep background ivory
        win.Color = light_bg_col
        win.flip()

        # clear buffer of all previously recorded key events:
        event.clearEvents()

        ### specify settings for the current block

        ### Prepare stimuli:

        # get block kind
        curr_block = all_blocks[exp_block_counter]
        print("start preparing block " + curr_block)

        # Check whether it's some of the non-text tasks,
        # the reading bl training or one of the dual-task main blocks.

        # If current block it's a non-text block, skip this routine.
        if curr_block in ["click_training", "1back_single_training1", "1back_single_training2",
                          "1back_single_main", "2back_single_training1", "2back_single_training2", "2back_single_main"]:
            print("skipping current routine")
            # skip questions & end current routine
            skip_questions = True
            continueRoutine = False

        # if it's the reading bl training block, prepare training stimuli:
        elif curr_block == "Reading_Baseline_training":
            # keep background ivory
            win.Color = light_bg_col
            win.flip()

            ### Show instructions
            # set instruction text
            instr_text = locals()["instr_" + curr_block]
            # create text box
            instr_text_stim = visual.TextStim(win,
                                              text = instr_text,
                                              height = 0.5, # font height: 5° visual angle
                                              font = "Bookman Old Style",
                                              pos = (0, 0),
                                              color = 'black')

            # display the text on screen
            while True:
                # keep background ivory
                win.Color = light_bg_col
                instr_text_stim.draw()
                win.flip()
                # end showing screen if participant presses space
                if 'space' in event.getKeys():
                    break

            ### get training text
            curr_text = reading_bl_tr_text
            curr_text_nr = "reading_bl_training_text"
            curr_nback_cond = None
            curr_colours = all_colour_lists[0]
            # show training questions
            skip_questions = False
            training_Qs = True

            ### change background colour
            # transition from ivory (RGB: 240, 223, 204)
            # to medium grey (RGB: 10, 10, 10)
            change_bg_colour(window = win,
                             start_rgb = light_bg_col,
                             end_rgb = dark_bg_col,
                             seconds = 2)
            # Wait for a brief period of time so bg is set
            core.wait(0.8)
            # keep background grey
            win.Color = dark_bg_col
            win.flip()

        # if it's one of the "normal" main blocks, prepare main block stimuli:
        elif curr_block in ["Reading_Baseline_main", "1back_dual_main", "2back_dual_main"]:

            # keep background ivory
            win.Color = light_bg_col
            win.flip()
            ### Show instructions
            # set instruction text
            instr_text = locals()["instr_" + curr_block]
            # create text box
            instr_text_stim = visual.TextStim(win,
                                              text = instr_text,
                                              height = 0.5, # font height: 5° visual angle
                                              font = "Bookman Old Style",
                                              pos = (0, 0),
                                              color = 'black')
            # Display the text on screen
            while True:
                instr_text_stim.draw()
                win.flip()
                # end showing screen if participant presses space
                if 'space' in event.getKeys():
                    break

            ### change background colour
            # transition from ivory (RGB: 240, 223, 204)
            # to medium grey (RGB: 10, 10, 10)
            change_bg_colour(window = win,
                             start_rgb = light_bg_col,
                             end_rgb = dark_bg_col,
                             seconds = 2)
            # Wait for a brief period of time so bg is set
            core.wait(0.8)
            # keep background grey
            win.Color = dark_bg_col
            win.flip()

            # show main block questions
            skip_questions = False
            training_Qs = False

            # get text nr:
            curr_text_nr = all_texts_nrs_list[exp_block_counter]

            # get n-back condition:
            curr_nback_cond = curr_block[0] # get first character of block name

            # if it is a 1 or a 2, set that as current n-back level:
            if curr_nback_cond in [1, 2]:
                curr_nback_cond == int(curr_nback_cond)
            # if it's neither 1 nor 2, it has to be a block without n-back,
            # so set curr_nback_cond to None
            else:
                curr_nback_cond = None

            # get list with targets & list with colours
            curr_targets = all_target_lists[exp_block_counter]
            curr_colours = all_colour_lists[exp_block_counter]
            # for current text nr, get text whose name = current text nr
            curr_text = locals()[curr_text_nr]

        ### Start block loop

        # create empty text stimulus
        stim = visual.TextStim(win = win,
                               text = ' ',
                               pos = (0,0), # center stimulus
                               font = "Times New Roman",
                               height = 1) # font height = 1° visual angle

        # set the flicker rate to 10 Hz
        #stim.flicker(frequency = 10)

        stim.draw()
        win.flip()

        # clear buffer of all previously recorded key events:
        event.clearEvents()

        # loop words in current text
        for trial_idx, curr_word in enumerate(curr_text):
            print("current idx: " + str(trial_idx) + ", curr word:" + curr_word)

            ### prepare & show current word:

            # get current colour
            curr_colour = curr_colours[trial_idx]

            # if it's a block with an n-back task, prepare target list as well
            if curr_nback_cond != None:
                curr_target = curr_targets[trial_idx]
                saw_target = False

            # get trial number (start counting from 1, so add 1)
            curr_trial_nr = trial_idx + 1

            # set current word & colour as content of text stimulus
            stim.color = curr_colour
            stim.text = curr_word

            # show word on screen
            stim.draw() # draw word on screen
            win.flip() # update the window to clear the screen and display the word

            # send word onset trigger to LSL stream
            marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word
            #out_marker.push_sample(["STIM_ONSET_" + marker_text])

            # record trial onset time
            onset_time = core.getTime()
            print(onset_time)

            ### wait for 50 ms
            while core.getTime() < onset_time + 0.05:
                # draw the stimulus during the waiting period
                stim.draw()
                win.flip()

            ### wait for key response:
            # In blocks with n-back task, participants can press "c" to indicate they saw a target colour and "space" to go to the next word/stimulus.
            # In blocks without n-back task, participants can only press "space" to go to the next word/stimulus.
            print("start tracking key responses")

            ### start recording responses
            # start "endless" while loop that looks for responses
            while True:
                # in each iteration, draw word on screen
                stim.draw()
                win.flip()

                # if participant presses space bar on their keyboard...
                if event.getKeys(['space']):
                    # get reaction time
                    curr_duration = core.getTime() - onset_time
                    ### send trigger to LSL stream to indicate participant wants to go to next word
                    marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word
                    #out_marker.push_sample(["REACTION_NEXT_STIM_" + marker_text])
                    print("detected space key press -- RT: " + str(curr_duration))
                    # break while loop
                    break

                # if participant pressed button "c" for the first time and it's an n-back condition
                # where they're actually supposed to do that (aka not a reading baseline condition)...
                elif event.getKeys(['c']) and curr_nback_cond != None and saw_target == False:
                    # get reaction time
                    curr_nback_RT = onset_time - core.getTime()
                    ### send trigger to LSL stream to indicate n-back response
                    marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word
                    #out_marker.push_sample(["NBACK_REACTION_" + marker_text])
                    # only get first target response, we don't care if they press the button more than once:
                    saw_target = True
                    print("detected C key press -- n-back RT: " + str(curr_nback_RT))
                # If esc is pressed, end the experiment:
                elif event.getKeys(['escape']):
                    core.quit()

            ### end trial
            print("end trial")
            # stop display of current word
            win.flip()

            # check whether response was hit, miss, false alarm or correct rejection
            # they saw a target and there was one: hit
            if curr_nback_cond != None:
                if saw_target and curr_target:
                    curr_nback_response = "hit"
                # they didn't see a target but there was one: miss
                elif saw_target == False and curr_target:
                    curr_nback_response = "miss"
                    curr_nback_RT = None
                # they didn't see a target and there was none: correct rejection
                elif saw_target == False and curr_target == False:
                    curr_nback_response = "correct rejection"
                    curr_nback_RT = None
                # they saw a target but there was none: false alarm
                elif saw_target and curr_target == False:
                    curr_nback_response = "false alarm"
            # if it wasn't an n-back task block:
            else:
                curr_target = None
                curr_nback_response = None
                curr_nback_RT = None

            ### save everything in output csv
            thisExp.addData('word', curr_word)
            thisExp.addData('colour', curr_colour)
            thisExp.addData('target', curr_target)
            thisExp.addData('nback_response', curr_nback_response)
            thisExp.addData('nback_RT', curr_nback_RT)
            thisExp.addData('block_kind', curr_nback_cond)
            thisExp.addData('duration', curr_duration)
            thisExp.addData('text_nr', curr_text_nr)
            thisExp.addData('block_nr', curr_block)
            thisExp.addData('trial_nr', curr_trial_nr)
            # start a new row in the csv
            thisExp.nextEntry()

            ### IF TESTING MODE ENABLED: end loop after 4 trials
            if expInfo['testing_mode'] == "yes":
                if trial_idx == 3:
                    break

            ### send word offset trigger to LSL stream
            marker_text = "block_" + curr_block + "_trial_" + str(curr_trial_nr) + "_" + curr_word + "_" + curr_colour + "_" + str(curr_nback_response)
            #out_marker.push_sample(["STIM_OFFSET_" + marker_text])

        print("finished presenting trials")

        ### Prepare questions

        # change background colour from grey (RGB: 10, 10, 10)
        # to ivory (RGB: 240, 223, 204)
        change_bg_colour(window = win,
                         start_rgb = dark_bg_col,
                         end_rgb = light_bg_col,
                         seconds = 2)
        # Wait for a brief period of time so bg is set
        core.wait(0.5)

        # keep background ivory
        win.Color = light_bg_col
        win.flip()

        # end current routine
        continueRoutine = False
  Routine instr1
    CodeComponent set_instructions
      Code Type = Py
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      Begin Routine:
        # set instructions for current block
    TextComponent instr_1_1
      color = black
      durationEstim = 1
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Cheerio cowboy, this is the beginning of a block!
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    TextComponent instr_1_2
      color = black
      durationEstim = 1
      letterHeight = 0.6
      pos = (0, -3)
      startVal [time (s)] = 0
      text = Please press „Space“ to start the block!
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    KeyboardComponent resp_1
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instr2
Flow
  Routine settings_2
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 17
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    Routine no_text_blocks
    Routine text_blocks
    Routine Q1
    Routine Q2
    Routine Q3
  LoopTerminator blocks
